PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'eye_lr': '1'}
  Full-screen window = True
  Monitor = tiffany_laptop
  Screen = 1
  Units = cm
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = map
  logging level = debug
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Routines
  Routine Calibration
    PolygonComponent alignment_rectangle
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (26, 16)
      startVal [time (s)] = 0
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    PolygonComponent fixate_vert
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent confirm_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Press Space to confirm calibration.
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    KeyboardComponent key_resp
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent fixate_vert_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz_2
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']), 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']),-4+jitter)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent middle_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), jitter)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent top_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), 4+top_loc+jitter)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent blind_spot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 50
      opacity = 0.5
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), -2)
      shape = regular polygon...
      size = (2,2)
      startVal [time (s)] = 0.0
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Flow
  Routine Calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/top_line_locs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('top_loc', -0.3), ('jitter', -0.048524867982971655)]),
      OrderedDict([('top_loc', 0.0), ('jitter', -0.0005825382069245987)]),
      OrderedDict([('top_loc', -0.2), ('jitter', -0.03545791277476733)]),
      OrderedDict([('top_loc', 0.2), ('jitter', 0.037676176594080166)]),
      OrderedDict([('top_loc', -0.1), ('jitter', 0.002099914411199144)]),
      OrderedDict([('top_loc', 0.1), ('jitter', -0.03760904275300468)]),
      OrderedDict([('top_loc', 0.3), ('jitter', 0.025191478804771662)]),
      OrderedDict([('top_loc', 0.2), ('jitter', 0.003864745612191411)]),
      OrderedDict([('top_loc', -0.2), ('jitter', 0.03032091387346582)]),
      OrderedDict([('top_loc', 0.1), ('jitter', -0.034307846212779505)]),
      OrderedDict([('top_loc', 0.0), ('jitter', -0.03413565287689069)]),
      OrderedDict([('top_loc', -0.3), ('jitter', 0.012182778751357093)]),
      OrderedDict([('top_loc', 0.3), ('jitter', 0.033088798376365365)]),
      OrderedDict([('top_loc', -0.1), ('jitter', -0.04997196273095828)]),
      OrderedDict([('top_loc', 0.0), ('jitter', -0.01463430192966031)]),
      OrderedDict([('top_loc', -0.1), ('jitter', -0.04684470882438551)]),
      OrderedDict([('top_loc', 0.1), ('jitter', -0.01598527686897384)]),
      OrderedDict([('top_loc', -0.2), ('jitter', -0.007918155136096727)]),
      OrderedDict([('top_loc', 0.3), ('jitter', -0.01182391572046222)]),
      OrderedDict([('top_loc', 0.2), ('jitter', -0.04267912227526384)]),
      OrderedDict([('top_loc', -0.3), ('jitter', 0.004758778271636699)]),
      OrderedDict([('top_loc', 0.2), ('jitter', 0.04477159743674329)])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
    Routine Trial
  LoopTerminator trials
  Routine Calibration
